CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:34
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^obj(?P<Obj_id>.*)_stain(?P<Stain>.*)_(?P<Source>.*).tiff
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<Source_folder>.*)[\\/](?P<Chip>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Stain "DAPI")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Stain "Actin")
    Name to assign these images:CellBody
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Stain "YAP")
    Name to assign these images:YAP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Background
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    Block size:45
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:80
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:CellBody
    Name the output image:IllumCellBody
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:200
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:CellBody
    Name the output image:IllumYAP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:200
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:DNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:9|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
    Select the input image:CellBody
    Name the output image:CorrCellBody
    Select the illumination function:IllumCellBody
    Select how the illumination function is applied:Divide
    Select the input image:YAP
    Name the output image:CorrYAP
    Select the illumination function:IllumYAP
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

MeasureImageQuality:[module_num:10|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:CorrDNA
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureImageQuality:[module_num:11|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:CorrCellBody
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:Yes
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:CorrDNA
    Name the primary objects to be identified:IdentifyPrimaryObjects_H_threshold
    Typical diameter of objects, in pixel units (Min,Max):10,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:ImageQuality_ThresholdOtsu_CorrDNA_2W
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
IdentifySecondaryObjects:[module_num:13|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
    Select the input objects:IdentifyPrimaryObjects_H_threshold
    Name the objects to be identified:IdentifySecondaryObjects_H_threshold_H_primary
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:CorrCellBody
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000,0.01
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifySecondaryObjects:[module_num:14|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
    Select the input objects:IdentifyPrimaryObjects_H_threshold
    Name the objects to be identified:YAP_H_threshold_H_primary
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrYAP
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    Regularization factor:0
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:15|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
    Select the larger identified objects:IdentifySecondaryObjects_H_threshold_H_primary
    Select the smaller identified objects:IdentifyPrimaryObjects_H_threshold
    Name the tertiary objects to be identified:YAP_mask_only_cytoplasm
    Shrink smaller object prior to subtraction?:No

MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:IdentifyPrimaryObjects_H_threshold, IdentifySecondaryObjects_H_threshold_H_primary
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:17|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
    Select images to measure:CorrCellBody, CorrDNA
    Select objects to measure:IdentifyPrimaryObjects_H_threshold, IdentifySecondaryObjects_H_threshold_H_primary
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureImageAreaOccupied:[module_num:18|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
    Measure the area occupied by:Objects
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    Select object sets to measure:IdentifyPrimaryObjects_H_threshold, IdentifySecondaryObjects_H_threshold_H_primary

MeasureObjectIntensity:[module_num:19|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notes:['']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enabled:False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
    Select images to measure:CellBody, CorrCellBody, CorrDNA, CorrYAP, DNA, YAP
    Select objects to measure:IdentifyPrimaryObjects_H_threshold, IdentifySecondaryObjects_H_threshold_H_primary

MaskObjects:[module_num:20|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
    Select objects to be masked:YAP_H_threshold_H_primary
    Name the masked objects:YAP_nucleus
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:IdentifyPrimaryObjects_H_threshold
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:21|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
    Select objects to be masked:YAP_H_threshold_H_primary
    Name the masked objects:YAP_cytoplasm
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:YAP_mask_only_cytoplasm
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskImage:[module_num:22|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enabled:False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
    Select the input image:YAP
    Name the output image:YAP_only_cytoplasm
    Use objects or an image as a mask?:Objects
    Select object for mask:YAP_mask_only_cytoplasm
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    Invert the mask?:No

MaskImage:[module_num:23|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enabled:False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
    Select the input image:YAP
    Name the output image:YAP_only_nucleus
    Use objects or an image as a mask?:Objects
    Select object for mask:IdentifyPrimaryObjects_H_threshold
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    Invert the mask?:No

MeasureImageIntensity:[module_num:24|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
    Select images to measure:CellBody, CorrCellBody, CorrDNA, CorrYAP, DNA, YAP
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:IdentifyPrimaryObjects_H_threshold, IdentifySecondaryObjects_H_threshold_H_primary, YAP_H_threshold_H_primary, YAP_cytoplasm, YAP_mask_only_cytoplasm, YAP_nucleus
    Calculate custom percentiles:No
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
MeasureObjectIntensity:[module_num:25|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
    Select images to measure:CellBody, CorrCellBody, CorrDNA, CorrYAP, DNA, YAP
    Select objects to measure:IdentifyPrimaryObjects_H_threshold, IdentifySecondaryObjects_H_threshold_H_primary, YAP_H_threshold_H_primary, YAP_cytoplasm, YAP_mask_only_cytoplasm, YAP_nucleus

CalculateMath:[module_num:26|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
    Name the output measurement:Area_Measurement_Primary_H
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:IdentifyPrimaryObjects_H_threshold
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
RescaleIntensity:[module_num:27|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
    Select the input image:CorrCellBody
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
CalculateMath:[module_num:28|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
    Name the output measurement:Area_Measurement_Secondary_H_H
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:IdentifySecondaryObjects_H_threshold_H_primary
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:29|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
    Name the output measurement:Measurement
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:YAP_nucleus
    Select the numerator measurement:Intensity_IntegratedIntensity_CorrYAP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:YAP_cytoplasm
    Select the denominator measurement:Intensity_IntegratedIntensity_CorrYAP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:30|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\topochip-flow-matching\\cellprofiler validation\\CP workdir real
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifyPrimaryObjects_H_threshold|AreaShape_ConvexArea,IdentifyPrimaryObjects_H_threshold|AreaShape_Zernike_5_5,IdentifyPrimaryObjects_H_threshold|AreaShape_Zernike_5_3,IdentifyPrimaryObjects_H_threshold|AreaShape_Zernike_5_1,IdentifyPrimaryObjects_H_threshold|AreaShape_Zernike_3_3,IdentifyPrimaryObjects_H_threshold|AreaShape_Zernike_3_1,IdentifyPrimaryObjects_H_threshold|AreaShape_Zernike_8_8,IdentifyPrimaryObjects_H_threshold|AreaShape_Zernike_8_6,IdentifyPrimaryObjects_H_threshold|AreaShape_Zernike_8_4,IdentifyPrimaryObjects_H_threshold|AreaShape_Zernike_8_2,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:31|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Elsewhere...|D:\\topochip-flow-matching\\cellprofiler validation\\cp workdir temp fake
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:IdentifySecondaryObjects_H_threshold_H_primary
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
OverlayObjects:[module_num:32|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enabled:False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
    Input:RescaleIntensity
    Name the output image:OverlayObjects_DNA
    Objects:IdentifyPrimaryObjects_H_threshold
    Opacity:0.3

OverlayObjects:[module_num:33|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enabled:False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
    Input:OverlayObjects_DNA
    Name the output image:OverlayObjects_DNA_PHA
    Objects:IdentifySecondaryObjects_H_threshold_H_primary
    Opacity:0.25

SaveImages:[module_num:34|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects_DNA_PHA
    Select method for constructing file names:From image filename
    Select image name for file prefix:CellBody
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Elsewhere...|D:\\topochip-flow-matching\\cellprofiler validation\\overlay_images\\
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
